PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Completed URL = https://app.prolific.com/submissions/complete?cc=C1K3LNZU
  Data filename = u'data/%s_%s' % (expInfo['Prolific_ID'], expName)
  Experiment info = {'Prolific_ID': '', 'Age': '', 'Gender': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['_ds400-500.jpg', '2AFC_1.xlsx', '3ce51135-ecf8-4172-82d1-528e7fe6edf6_300.jpg', '3D_Design_Toilet_Seat.jpg', '3POpez.jpg', '05_05ring.jpg', '5_Lister_Bandage_Scissor.jpg', '06 DP Horseshoe_wback.jpg', '6c3c44f0-41f2-41fa-831e-2b89123d0236_300.jpg', '7deb399f-d20d-417c-94df-20b613aa3743_300.jpg', '8a8aacfa-d0d4-48b4-883d-effc8c11bac5.jpg', '009.-trashcan_lrg.jpg', '27collectibels_corset-743091.jpg', '31C46AWYS7L._AA280_.jpg', '31FH4H8V33L._SS500_.jpg', '31sCvjMS3jL._SS500_.jpg', '40.jpg', '41AWBNXQRML._AA262_.jpg', '41K7QVRX50L._SS500_.jpg', '41TBS5KP5YL._SS384_.jpg', '41tExEsn-gL._AA262_.jpg', '41XJB9YZ93L._SS384_.jpg', '042_0013.jpg', '042_0044.jpg', '51wbushUphL._AA262_.jpg', '59df2ab2-780a-4c04-ac8b-c1573ae078c4_300.jpg', '69d21be1-3163-4aef-aacd-df4baeab9701_300.jpg', '160_0057.jpg', '199bdf21-a774-40d1-ab0c-55f50090a670_300.jpg', '269-200613-_DSC0873.jpg', '412LSlnRxjL._SS500_.jpg', '412YZ25RFBL._AA262_.jpg', '594.jpg', '647dd095-b0f5-4824-88a8-a457c0bb1f72_300.jpg', '712_toothbrush.jpg', '1342_bialy_large.jpg', '1383_1749_popup copy.jpg', '1639-large.jpg', '1975hunter.jpg', '2000-4684_M.jpg', '2120B_blue_floral_handkerchief.jpg', '2592!36-4867391.jpg', '3090-b.jpg', '4600.jpg', '7450-Pro-Gloves-Long-Back.jpg', '7638ba9f-1b10-4b95-982a-95c57e784739_400.jpg', '8700rDeviceHomeRibbonFull.JPG', '9001.jpg', '11193-large.jpg', '15265.jpg', '22683.jpg', '040115_gadgets_razor_hmed10a.hmedium.jpg', '060350.jpg', '79398-3-1-99.77F-K75-5-0013_320x320.jpg', '091106micdroshred.jpg', '100778.jpg', '101643b_l.jpg', '132005.jpg', '262597_fpx.jpg', '465088.jpg', '0604100L.jpg', '746160.jpg', '5965002_ra.jpg', '6700720A63UC158331M.jpg', '7256426_ra.jpg', '7264122_ra.jpg', '7424557_sa.jpg', '7666821_ra.jpg', '7760719_sa.jpg', '8020932.thl.jpg', '9817230.thl.jpg', '22824636.thl.jpg', '22864488.thl.jpg', '26388357.thl.jpg', '26461874.thl.jpg', '26467374.thl.jpg', '35312239.thl.jpg', '35312253.thl.jpg', '83266516_6dc38dd6d2.jpg', '209170485_34857e863d_o.jpg', '230397853.jpg', '1078390905.jpg', '1167776528_Singer-7466.jpg', '3060324930_XL.jpg', '04922349088.jpg', '04922357088.jpg', '049881410001.jpg', '060621160348s.jpg', '2003071700080406.jpg', 'a00e7dbe-acad-41ed-b95d-6b5ffbbe4c9a_300.jpg', 'A1DOLLAR.jpg', 'A1KEY.jpg', 'A4LEFTKEY.jpg', 'A6DOMINO.jpg', 'a7b18beb-0ddd-4970-8618-53ccccd5950b_300.jpg', 'A8DOMINO2.jpg', 'AA Luffield Radial crescent Desk 1600mm x 1200mm.jpg', 'AALTIRE.jpg', 'AANKEY.jpg', 'Aapple34.jpg', 'ab44.jpg', 'ab52.jpg', 'Abackpack8.jpg', 'Abackpack31.jpg', 'ABARREL3.jpg', 'Abasket56.jpg', 'ABELGFLAG.jpg', 'ABELL3.jpg', 'ABELL31.jpg', 'Abikini5.jpg', 'Abikini8.jpg', 'ABINOCU53.jpg', 'ABINOCULA.jpg', 'Abird22.jpg', 'Abird26.jpg', 'ABIRDCA10.jpg', 'ABIRDHO20.jpg', 'ABIRDHO27.jpg', 'ABONGO6.jpg', 'ABONGO22.jpg', 'ABONZAI23.jpg', 'Abottle52.jpg', 'Abottle96.jpg', 'Abottleopener.jpg', 'ABOWARRO4.jpg', 'Abowl50.jpg', 'Abowl59.jpg', 'ABUTTFL15.jpg', 'ACAMERA29.jpg', 'ACANDFLO3.jpg', 'ACANDLE24.jpg', 'ACATPLAY5.jpg', 'ACHEESGR4.jpg', 'Aclock213.jpg', 'Aclock282.jpg', 'ACOIN6.jpg', 'Acookingpan6.jpg', 'ACOOKPO14.jpg', 'ACOOKPO56.jpg', 'ACOUCH14.jpg', 'ACUSHIO26.jpg', 'Acushion13.jpg', 'ADOG51.jpg', 'ADOG61.jpg', 'ADOLL158.jpg', 'ADOLL169.jpg', 'ADRESSE40.jpg', 'ADRESSE43.jpg', 'ADUSTER5.jpg', 'ADUSTER7.jpg', 'AEARPHON6.jpg', 'AELCGUI12.jpg', 'AELECGUI5.jpg', 'Afeather12.jpg', 'AFG Amy 4 in 1 Convertible Crib.jpg', 'AFIREPLA2.jpg', 'AFIREPLA4.jpg', 'AFISHBOW2.jpg', 'AFISHLU5.jpg', 'AFISHLUR7.jpg', 'AFRAME138.jpg', 'AFRAME139.jpg', 'Agardeninghoe.jpg', 'Agardeningsho.jpg', 'AGLOBE6.jpg', 'AGLOBE8.jpg', 'AGOLDEA17.jpg', 'Agoldfishswi8.jpg', 'AGREENHAT.jpg', 'AHANDBAG6.jpg', 'Ahorn21.jpg', 'Ahorn30.jpg', 'AHORSHOE4.jpg', 'AJACKOL22.jpg', 'Akettle85.jpg', 'AKEY12.jpg', 'ALADYMUG2.jpg', 'ALAMP19.jpg', 'Alamp102.jpg', 'ALEAF38.jpg', 'ALEAF54.jpg', 'ALEI16.jpg', 'ALIGHTE24.jpg', 'ALIGHTE25.jpg', 'ALOG6.jpg', 'ALOG7.jpg', 'ALONGCAT2.jpg', 'Alunchbox90.jpg', 'Alunchbox115.jpg', 'Amanualfan3.jpg', 'Amanualfan16.jpg', 'Amateur_ice_hockey_skates.jpg', 'AMOTH28.jpg', 'Amug21.jpg', 'AMUSICSTA.jpg', 'AMUSTAND7.jpg', 'AOKA.jpg', 'AORITABLE.jpg', 'AORITABLS.jpg', 'APACKME32.jpg', 'APACKME42.jpg', 'APADLOCK.jpg', 'APAINTB34.jpg', 'APAINTBR6.jpg', 'APALMRTEE.jpg', 'APASTA.jpg', 'APASTA20.jpg', 'APDB.jpg', 'Apencilshar13.jpg', 'Apex_pcb.jpg', 'APIESERV2.jpg', 'APIESERV3.jpg', 'APILLS5.jpg', 'APILLS8.jpg', 'APINETREE.jpg', 'APITCHER8.jpg', 'Apitcher25.jpg', 'APLANT6.jpg', 'APLANT14.jpg', 'Aredapple5.jpg', 'AREDCOUC5.jpg', 'AREDHAT4.jpg', 'Aroadsignin16.jpg', 'AROCK9.jpg', 'Arock90.jpg', 'Arollofstrin2.jpg', 'ASALTPEPP.jpg', 'ASEASHE17.jpg', 'aspirateur-bassin.jpg', 'Aspoolofstrin.jpg', 'Aspraybottle5.jpg', 'Aspraybottle6.jpg', 'ASTOOL23.jpg', 'astro scout.jpg', 'ATOGOFLAG.jpg', 'ATONGS.jpg', 'Atoothbrush3.jpg', 'Atoycoil.jpg', 'ATRACTO39.jpg', 'ATRACTOR6.jpg', 'Atrafficsign2.jpg', 'ATRUNK16.jpg', 'ATYPEWR46.jpg', 'ATYPEWR56.jpg', 'Avase106.jpg', 'Avase143.jpg', 'Awickerbask21.jpg', 'AWIG7.jpg', 'AWIG73.jpg', 'Awomansshoe.jpg', 'AWSHOES4.jpg', 'B0000C7AYO.02.LZZZZZZZ.jpg', 'B000BHICM0.01._AA280_SCLZZZZZZZ_.jpg', 'b2c_l_scd6550.jpg', 'B00005OONH.01.LZZZZZZZ.jpg', 'ba9988fd-9041-4b74-9cfb-06dde69e373e_300.jpg', 'Baby_Stroller.jpg', 'babyant_1966_1034199.jpg', 'baylor.JPG', 'best_twin_tall.jpg', 'BirdCage-19-single-on-white.jpg', 'blackandtan.jpg', 'BOOT.jpg', 'boucles_d_oreilles_bonchd_0203.jpg', 'Brass scales uid.jpg', 'Breeze_kayak_2.jpg', 'BROOM.jpg', 'broom_industrial.jpg', 'BWNewsImage535281.jpg', 'c8d48476-f185-4481-a124-4bb1d5c84793_300.jpg', 'caddycaddy.jpg', 'cake-crop.jpg', 'Canaletti Gray 1.JPG', 'candy 66.jpg', 'candy 132.jpg', 'CashRegister.jpg', 'CashRegMedium.jpg', 'cassette-tape-1.jpg', 'Cemco_45lb_dumbbell_medium.jpg', 'Cherry-Pie.jpg', 'cle-USB-baladeur-MP3-KXB-256.jpg', 'clinom1.jpg', 'coat-tree.jpg', 'cobra80.jpg', 'coffre 2.jpg', 'colgate.jpg', 'copperpan10.jpg', 'corkscrew.jpg', 'cowgirlpin_big.jpg', 'cr89bt.jpg', 'cracker.snack.bread.jpg', 'D-1 Four drawers desk Elm 64x23x33.jpg', 'DAD5508L.jpg', 'DCS315 Camera.jpg', 'dealerImage_843.jpg', 'detroit-tape-livepics-cass.jpg', 'devilsblue986.jpg', 'doll-house-4-7in.jpg', 'donut.jpg', 'draggold.jpg', 'DSC00961.JPG', 'ecolution_collarS.jpg', 'ecs.jpg', 'ehs.jpg', 'exact.jpg', 'f4d325b6-e769-44e6-aa3b-e1af36e1d71a_300.jpg', 'f18f0560-da6f-4148-a6b1-b7bd17f46059_300.jpg', 'fbcc2693-86bb-4b23-a5cb-f59bd788a308_300.jpg', 'FiestaSoftGripSilPinTMSiliconeRollingPin.jpg', 'folding_bike_dahon.jpg', 'folding_screens_retablo_d.jpg', 'fork_up.jpg', 'francisfrancisx1-coffee-maker.jpg', 'giant_tricycle_ma_06_m.jpg', 'gold heart rosary.jpg', 'graco-2240-9757ngs.jpg', 'hamadan-rug.jpg', 'hammer.jpg', 'hammernew03.jpg', 'handle1.jpg', 'happy-lei-light-green.jpg', 'hawaiian_shirt_corvette_panel_rd_pf.jpg', 'hawaiian_shirt_motorcycle_bk_pf.jpg', 'headphones_l.jpg', 'henrybar_stool1.jpg', 'her9796.jpg', 'High-Chair-HC-201-4-.jpg', 'HM651001a_Leatherman_tool_charge_ti_mit_lederetui_Relags.jpg', 'il-423-3784.jpg', 'images-4898.jpg', 'img_9246-muffin.jpg', 'img_door_knockers_NEM2207.jpg', 'inflatable-tent.jpg', 'INGPCYHE0455.jpg', 'istockphoto_2309369_meat_lovers_pizza_5.jpg', 'Jackson Wheelbarrow Produvt.jpg', 'JBL-Encounter-2.1-Speakers-2.jpg', 'jd-bug-eco-scooter-blue.jpg', 'joy011.jpg', 'jp glove top.jpg', 'Kamenstein-12-Tin-Magnetic-Spice-Rack-B0002TVV34-L.jpg', 'kayak_complet_10.jpg', 'ketchup-hot2-big.jpg', 'keyboardnew02.jpg', 'l_640045_s05_000.jpg', 'l_640643_s05_000.jpg', 'l3659610.jpg', 'laptopnew04.jpg', 'laptopnew09.jpg', 'Large martingale-Reflective.jpg', 'Life-Fitness-C1-5-Upright-Exercise-Bike.jpg', 'lightbulb28.jpg', 'LM8R.jpg', 'logitech-dinovo-edge.jpg', 'loom-baby-wolf-500.jpg', 'LPS1540.jpg', 'M4791.jpg', 'Make-Up-Set-Cake.jpg', 'master MR037.jpg', 'master-TD006.jpg', 'matzah.jpg', 'micro-scooter-t-bar-blue-6.jpg', 'MicrosoftTreoH4Web.jpg', 'milkyway.jpg', 'mlc-3501-mule-saddle.jpg', 'mom_quilt.jpg', 'MOME800-33.jpg', 'motorola c115-thumb.jpg', 'MotoSmall.jpg', 'muffin02.jpg', 'Multimedia_Speakers.jpg', 'n_hsf.jpg', 'n_sf_1666.jpg', 'necklascenew04.jpg', 'necklascenew08.jpg', 'nlc009389-v6.jpg', 'nunchaku2.jpg', 'Nunchaku-White_sml.jpg', 'ocadia11if.jpg', 'O-CRT-DU_lrg.jpg', 'p_NOR8121.jpg', 'P184708_hero.jpg', 'P190250_hero.jpg', 'p1983817dt.jpg', 'p2363441dt.jpg', 'p2740000dt.jpg', 'p2796972dt.jpg', 'p3391515dt.jpg', 'p3677539dt.jpg', 'p3956769dt.jpg', 'Padlock_full.jpg', 'parfait.jpg', 'peg_perego_uno_verde.jpg', 'pellacoatrack_01.jpg', 'pen02.jpg', 'perfume5-b.jpg', 'PerfumeBottle.jpg', 'ph_hp_container1.jpg', 'photo_thing13.jpg', 'Pie-Straw.jpg', 'PinkPassionWoovenHeadband.jpg', 'pipe4.jpg', 'pipe52.jpg', 'pizzapie.jpg', 'Polyester_Toilet_Seat__White_.jpg', 'popmech2.jpg', 'potatochips.jpg', 'potatochips2.jpg', 'Printed-Circuit-Board.jpg', 'pTRU1-2788705dt.jpg', 'Pumpkin Hookah Pipe Green on Red.jpg', 'pumpkin.jpg', 'PY2H1461.jpg', 'quilt05.jpg', 'r.jpg', 'r-2.jpg', 'RACING-BIKE-13540473898.jpg', 'RASOIR1590-PHILIPS-HQ7782.jpg', 'recipes_parfait.jpg', 'Red Canyon Tent.jpg', 'red-swingline-stapler.jpg', 'replacementbulb2.jpg', 'review_mcmilitary_3.jpg', 'roger.jpg', 'ROMSL1374.jpg', 'roquefort.jpg', 'rrr.jpg', 's0165607_enl.jpg', 'salt_2.JPG', 'Salt_Pepper_Mills_Sets.jpg', 'samanthas-fixation-socks.jpg', 'sandisk_sansa_m240_digital_audio_mp3_player-750479.jpg', 'Sandwichww.jpg', 'saunders12530_RingBinder.jpg', 'scales345tt.jpg', 'shears2.jpg', 'Shot Glass_450.jpg', 'SimplyChickHeadband32.jpg', 'single flap.jpg', 'Skates.jpg', 'SleepingCherubOnShell32004.jpg', 'small lilliput robot.jpg', 'socks-6780.jpg', 'Sony_Bravia_cellphone_1.jpg', 'sonytrv218_418a.jpg', 'speedbike.jpg', 'spicerack1.jpg', 'Spout_bottle_opener.jpg', 'squirt gun.JPG', 'ss30.jpg', 'Starfish01N.jpg', 'StarfishMod2.jpg', 'stingray-leather-hobo-handbag-1.jpg', 'Straight_Shaft_Umbrellas.jpg', 'sushi.jpg', 'sushi_narrowweb__300x357,0.jpg', 'swords_gladiator_sword_of_tigris.jpg', 'swords_western_tizona_of_charles_v.jpg', 'T3AM07.jpg', 'tapir-stamp_31.jpg', 'tc1050b_500pix.jpg', 'tecnica_denise-boot_oker_ocra.jpg', 'teddybear_1.jpg', 'tienew07.jpg', 'tienew14.jpg', 'Timbre07FestivalTeleAG.jpg', 'tire.jpg', 'TOY-010.jpg', 'train9.jpg', 'TurtleLicensePlate.jpg', 'Ultra-Short-pacific-blue400.jpg', 'umbrella-golf-a.jpg', 'unbranded-cumfilux-astral-3ft-mattress.jpg', 'Untitled-6.jpg', 'Wilson53Big.jpg', 'wolf-pup -500.jpg', 'xbox-controller-s.jpg', 'XVOFN.jpg', 'Yachting Magazine Cover - July 2004.jpg', 'Yellow-Kettle.jpg', 'YKDPM.jpg']
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = $[1,1,1]
  expName = 2AFC_1
  keyboardBackend = ioHub
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Routines
  Routine remebering
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        //psychoJS.window.mouseVisible = false;
        document.body.style.cursor='none';
      Begin Routine:
        win.mouseVisible = False
      End JS Routine:
        //psychoJS.window.mouseVisible = true;
        document.body.style.cursor='auto';
      End Routine:
        win.mouseVisible = True
    ImageComponent stim_to_remember
      image [set every repeat] = $stimulus1
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    TextComponent ISI
      letterHeight = 0.05
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 0.5
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    MouseComponent mouse_2
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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  Routine instr
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    TextComponent instr_text
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!
        It will take you no more than 15 minutes to complete the task.
        Please turn off notifications on all devices that may disturb you.

        There are 2 parts of the experiment:
        In the first part, you need to remember all the presented images.
        In the second part, you must select from images on the screen the one that was shown earlier (in the first part).

        If you are ready to run the first part of the experiment, press Enter.
    KeyboardComponent start_remembering
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
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  Routine exp
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    CodeComponent code_2
      Code Type = Both
      Begin Experiment:
        import random
        pos = [[-0.25, 0],[0.25, 0]]
      Begin JS Experiment:
        //import * as random from 'random';
        pos = [[(- 0.25), 0], [0.25, 0]];
      Begin JS Routine:
        pos=pos.sort(() => Math.random()-0.5);
        pos1 = pos[0];
        pos2 = pos[1];
      Begin Routine:
        random.shuffle(pos)
        pos1 = pos[0]
        pos2 = pos[1]
    MouseComponent mouse
      clickable = stim_1, stim_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent stim_1
      image [set every repeat] = $stimulus_1
      pos [set every repeat] = pos1
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent stim_2
      image [set every repeat] = $foil
      pos [set every repeat] = pos2
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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  Routine feedback
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if mouse.isPressedIn(stim_1):
            message = 'Correct'
            feed_back_col = 'green'
        else:
            message = 'Incorrect'
            feed_back_col = 'red'
    TextComponent feedback_text
      color [set every repeat] = $feed_back_col
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $message
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  Routine ThankYou
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    TextComponent end_text
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in the experiment!

        This is your completion code: C1K3LNZU.

        Please, press Enter to finish the experiment.
    KeyboardComponent finish_exp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
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  Routine BeforeExp
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    TextComponent instr_text_2
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In the second part of the experiment, you must select from images on the screen the one that was shown earlier in the first part.

        If you are ready to run the second part of the experiment, press Enter.
    KeyboardComponent start_trials
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
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  Routine consent
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    TextComponent consent_text
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        EXPERIMENT DESCRIPTION.
        In this experiment, you will be shown a set of images that you need to memorize. After the set presentation, you will need to choose from images presented on the screen one that you had seen before. You can choose it by mouse clicking on the image.
        RISKS.
        You will be required only to continue to interact with your web browser and make responses for a short duration.
        Thus, no potential risks or discomforts are anticipated. However, there may be risks that are currently unforeseeable.
        BENEFITS.
        There will be no direct benefit to you from these procedures. However, the investigator may learn more about basic questions pertaining to attention, memory and vision. This knowledge may have benefits to society in fields ranging from improving education to visual design, but these benefits will be indirect.
        Your participation is solicited, yet strictly voluntary. All information will be kept confidential and your name will not be associated with any research findings.
        By pressing SPACE, you are indicating that you are at least 18 years old, have read this consent form and agree to participate in this research study. Otherwise, press Escape.
    KeyboardComponent go_to_instr
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
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Flow
  Routine instr
  LoopInitiator pic_remebering loopType="TrialHandler"
    conditionsFile = 2AFC_1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulus1': 'ab52.jpg', 'stimulus_1': 'ab52.jpg', 'stim1_name': 'target_A', 'foil': 'ab44.jpg', 'foil_name': 'foil_A1'},
      {'stimulus1': 'AMUSICSTA.jpg', 'stimulus_1': 'AMUSICSTA.jpg', 'stim1_name': 'target_A', 'foil': 'AMUSTAND7.jpg', 'foil_name': 'foil_A1'},
      {'stimulus1': 'AFRAME138.jpg', 'stimulus_1': 'AFRAME138.jpg', 'stim1_name': 'target_A', 'foil': 'AFRAME139.jpg', 'foil_name': 'foil_A1'},
      {'stimulus1': 'swords_western_tizona_of_charles_v.jpg', 'stimulus_1': 'swords_western_tizona_of_charles_v.jpg', 'stim1_name': 'target_A', 'foil': 'swords_gladiator_sword_of_tigris.jpg', 'foil_name': 'foil_A1'},
      {'stimulus1': 'Straight_Shaft_Umbrellas.jpg', 'stimulus_1': 'Straight_Shaft_Umbrellas.jpg', 'stim1_name': 'target_A', 'foil': 'umbrella-golf-a.jpg', 'foil_name': 'foil_A1'},
      {'stimulus1': '060350.jpg', 'stimulus_1': '060350.jpg', 'stim1_name': 'target_A', 'foil': 'rrr.jpg', 'foil_name': 'foil_A1'},
      {'stimulus1': 'O-CRT-DU_lrg.jpg', 'stimulus_1': 'O-CRT-DU_lrg.jpg', 'stim1_name': 'target_A', 'foil': 'B000BHICM0.01._AA280_SCLZZZZZZZ_.jpg', 'foil_name': 'foil_A1'},
      {'stimulus1': '040115_gadgets_razor_hmed10a.hmedium.jpg', 'stimulus_1': '040115_gadgets_razor_hmed10a.hmedium.jpg', 'stim1_name': 'target_A', 'foil': 'RASOIR1590-PHILIPS-HQ7782.jpg', 'foil_name': 'foil_A1'},
      {'stimulus1': 'Ahorn21.jpg', 'stimulus_1': 'Ahorn21.jpg', 'stim1_name': 'target_A', 'foil': 'Ahorn30.jpg', 'foil_name': 'foil_A1'}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
    Routine remebering
  LoopTerminator pic_remebering
  Routine BeforeExp
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = 2AFC_1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulus1': 'ab52.jpg', 'stimulus_1': 'ab52.jpg', 'stim1_name': 'target_A', 'foil': 'ab44.jpg', 'foil_name': 'foil_A1'},
      {'stimulus1': 'AMUSICSTA.jpg', 'stimulus_1': 'AMUSICSTA.jpg', 'stim1_name': 'target_A', 'foil': 'AMUSTAND7.jpg', 'foil_name': 'foil_A1'},
      {'stimulus1': 'AFRAME138.jpg', 'stimulus_1': 'AFRAME138.jpg', 'stim1_name': 'target_A', 'foil': 'AFRAME139.jpg', 'foil_name': 'foil_A1'},
      {'stimulus1': 'swords_western_tizona_of_charles_v.jpg', 'stimulus_1': 'swords_western_tizona_of_charles_v.jpg', 'stim1_name': 'target_A', 'foil': 'swords_gladiator_sword_of_tigris.jpg', 'foil_name': 'foil_A1'},
      {'stimulus1': 'Straight_Shaft_Umbrellas.jpg', 'stimulus_1': 'Straight_Shaft_Umbrellas.jpg', 'stim1_name': 'target_A', 'foil': 'umbrella-golf-a.jpg', 'foil_name': 'foil_A1'},
      {'stimulus1': '060350.jpg', 'stimulus_1': '060350.jpg', 'stim1_name': 'target_A', 'foil': 'rrr.jpg', 'foil_name': 'foil_A1'},
      {'stimulus1': 'O-CRT-DU_lrg.jpg', 'stimulus_1': 'O-CRT-DU_lrg.jpg', 'stim1_name': 'target_A', 'foil': 'B000BHICM0.01._AA280_SCLZZZZZZZ_.jpg', 'foil_name': 'foil_A1'},
      {'stimulus1': '040115_gadgets_razor_hmed10a.hmedium.jpg', 'stimulus_1': '040115_gadgets_razor_hmed10a.hmedium.jpg', 'stim1_name': 'target_A', 'foil': 'RASOIR1590-PHILIPS-HQ7782.jpg', 'foil_name': 'foil_A1'},
      {'stimulus1': 'Ahorn21.jpg', 'stimulus_1': 'Ahorn21.jpg', 'stim1_name': 'target_A', 'foil': 'Ahorn30.jpg', 'foil_name': 'foil_A1'}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
    Routine exp
    Routine feedback
  LoopTerminator trials
  Routine ThankYou
